PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/sub-%s/sub-%s_ses-%s_task-%s_run-%s_%s' % (expInfo['participant'],expInfo['participant'],expInfo['session'], expName, expInfo['run'],expInfo['date'])
  Experiment info = {'participant': '', 'session': '', 'run': '', 'DoPractice': 'False', 'eeg': 'False', 'eyetrack': 'False'}
  Full-screen window = True
  Monitor = asus_TR
  Resources = ['stimuli/fractals_abstracts_stimuli_101/lure_and_images.json']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = swm_run_fractals
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine Probe
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    CodeComponent code_probe
      Code Type = Both
      Begin JS Routine:
        prbL = "white";
        prbR = "white";
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False

        prbL="white"
        prbR="white"

        rspprobe=0
      Each Frame:
        if expInfo['eeg'] and image_probe.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="PRB+",label=PRB,duration=float(probe_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['eyetrack'] and image_probe.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,PRB)
            EYEtriggerSent = True

        # Look for Key Response
        if key_resp:
            if key_resp.keys=='1':
                prbL="blue"
                if expInfo['eeg'] and rspprobe==0:
                    ns.send_event(event_type="RESP",label="RSPL")
                    rspprobe=1
            elif key_resp.keys=='2':
                prbR="blue"
                if expInfo['eeg'] and rspprobe==0:
                    ns.send_event(event_type="RESP",label="RSPR")
                    rspprobe=1
      Each JS Frame:
        if (key_resp) {
            if ((key_resp.keys === "1") || (key_resp.keys === "left")) {
                prbL = "blue";
            } else {
                if ((key_resp.keys === "2") || (key_resp.keys === "right")) {
                    prbR = "blue";
                }
            }
        }
      End JS Routine:
        s_key = key_resp.keys;
        if ((s_key === "s")) {
            trials.finished = true;
        }


        thisExp=psychoJS.experiment;

        if ((correct_resp === 1) || (correct_resp === "1")) {
            correctKey = ["1","left"];
        }
        if ((correct_resp === 2) || (correct_resp === "2")) {
            correctKey = ["2","right"];
        }

        if ((key_resp.keys === correctKey[0]) || (key_resp.keys === correctKey[1])) {
            key_resp.corr = true;
        } else {
            key_resp.corr = false;
        }

        thisExp.addData("correctKey", correctKey);
        thisExp.addData("key_resp_corr", key_resp.corr)
      End Routine:
        if expInfo['eeg'] and rspprobe==0:
            ns.send_event(event_type="RESP",label="MISS")
            rspprobe=1
    ImageComponent image_probe
      durationEstim = 3
      image [set every repeat] = $probe_list
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    KeyboardComponent key_resp
      allowedKeys = '1','left','2','right','s'
      correctAns = $correct_resp
      durationEstim = 3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
      store = first key
      storeCorrect = True
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    TextComponent text_LEFT
      color [set every frame] = $prbL
      durationEstim = 3
      languageStyle = RTL
      letterHeight = 0.08
      pos = (-0.20,-0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
      units = norm
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      text:
        <--
        Same
    TextComponent text_RIGHT
      color [set every frame] = $prbR
      durationEstim = 3
      letterHeight = 0.08
      pos = (0.20,-0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
      units = norm
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      text:
        -->
        Different
  Routine Encoding
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    CodeComponent code_encode
      Code Type = Py
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
      Each Frame:
        if expInfo['eeg'] and image_target.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(target_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['eyetrack'] and image_target.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,TRG)
            EYEtriggerSent = True
      End Routine:
        #if expInfo['eeg']:
        #    ns.send_event(event_type=TRG, start=image_target.started)
    ImageComponent image_target
      durationEstim = 2
      image [set every repeat] = $target_list
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
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  Routine Maintenance
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    CodeComponent code_maint
      Code Type = Py
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
      Each Frame:
        if expInfo['eeg'] and image_maint.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="MNT+",label=MNT,duration=float(3.0)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['eyetrack'] and image_maint.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,MNT)
            EYEtriggerSent = True
    ImageComponent image_maint
      image [set every repeat] = stimuli/SDRT/fix.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine ISI
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    CodeComponent code_isi
      Code Type = Py
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
      Each Frame:
        if expInfo['eeg'] and image_ISI.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="ISI+",label="ISI+",duration=float(2.0)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True

        if expInfo['eyetrack'] and image_ISI.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,"ISI")
            EYEtriggerSent = True
      End Routine:
        #if expInfo['eeg']:
        #    ns.send_event(event_type="ISI", start=image_ISI.started)
    ImageComponent image_ISI
      image = stimuli/SDRT/BLANK.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine getReady
    RoutineSettingsComponent getReady
      skipIf = expInfo['DoPractice'] == False
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    TextComponent text_5
      letterHeight = 0.08
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 5
      units = norm
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    TextComponent text_4
      letterHeight = 0.08
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 4
      units = norm
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    TextComponent text_3
      letterHeight = 0.08
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
      units = norm
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    TextComponent text_2
      letterHeight = 0.08
      pos = (0, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 2
      units = norm
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    TextComponent text_1
      letterHeight = 0.08
      pos = (0, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 1
      units = norm
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  Routine Fixation
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    CodeComponent code_fixation
      Code Type = Py
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False

        if load==1:
            TRG="TRG1"
            PRB="PRB1"
            MNT="MNT1"
        elif load==3:
            TRG="TRG3"
            PRB="PRB3"
            MNT="MNT3"
        elif load==4:
            TRG="TRG4"
            PRB="PRB4"
            MNT="MNT4"
        elif load==5:
            TRG="TRG5"
            PRB="PRB5"
            MNT="MNT5"
        elif load==7:
            TRG="TRG7"
            PRB="PRB7"
            MNT="MNT7"
        else:
            TRG="TRG0"
            PRB="PRB0"
            MNT="MNT0"
      Each Frame:
        if expInfo['eeg'] and image_fixation.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event, event_type="FIXN",label="FIXN",duration=float(0.5)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True

        if expInfo['eyetrack'] and image_fixation.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,"FIXN") # fixation marker
            EYEtriggerSent = True
    ImageComponent image_fixation
      image = stimuli/SDRT/fix.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Feedback
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    CodeComponent code_Feedback
      Code Type = Both
      Begin JS Routine:
        resp = psychoJS.experiment._trialsData;
        // Get count of correct trials
        acc = 0;
        //acc = resp.reduce((a, b) => a + b['key_resp.corr'], 0);
        // Get Trial Length
        //num = resp.length;
        num=trials.thisN;

        // Mean RTs:
        sumRt = 0;
        for (let eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++)
        {
          if ('key_resp.rt' in psychoJS.experiment._trialsData[eachResp]) {
            sumRt += psychoJS.experiment._trialsData[eachResp]['key_resp.rt'];
            acc += psychoJS.experiment._trialsData[eachResp]['key_resp.corr'];
          }
        }
        meanRt=(sumRt/num);
        //console.log(sumRt)
        pacc=( acc / num ) * 100;
        //console.log(pacc)

        //message for display
        msg = "Great Job !!!!!!\n\nYou got "+String(parseFloat(pacc).toFixed(2))+"% correct. \nYour response time is "+String(parseFloat(meanRt).toFixed(2))+" sec.";
      Begin Routine:
        # get reaction time and accuracy
        meanRt = trials.data['key_resp.rt'].mean()
        acc = trials.data['key_resp.corr'].sum()
        # calculate percent accuracy
        num = trials.nTotal
        pacc=(acc/num)*100
        # message for display
        msg = "Great Job !!!!!!\n\nYou got %0.2f %% correct. \nYour response time is %.2f sec." %(pacc,meanRt)

        core.wait(5) # sleep 5 seconds

        if expInfo['eyetrack']:
            # stop recording
            tracker.log_message("STOP")
            tracker.stop_recording()
            # close connection to the tracker
            tracker.close()

        if expInfo['eeg']:
            ns.send_event(event_type="STOP")
            ns.end_rec()
            ns.disconnect()
    TextComponent text_feedback
      letterHeight = 0.06
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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  Routine EncodeFeatures
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    CodeComponent code_encodeFeatures
      Code Type = Both
      Before Experiment:
        #import os
        #import json
        #import random
        #
        #stimuli_dir = 'stimuli/fractals_abstracts_stimuli_101'
        #json_path = os.path.join(stimuli_dir, 'lure_and_images.json')
        #
        #with open(json_path, 'r') as f:
        #    json_data = json.load(f)
        #
        #image_pool = json_data['image_pool']
        #lure_dict = json_data['lure_dict']
        #

        import os
        import json
        import random

        # Set stimuli folder and load lure_dict + image_pool once
        stimuli_dir = 'stimuli/fractals_abstracts_stimuli_101'
        json_path = os.path.join(stimuli_dir, 'lure_and_images.json')

        with open(json_path, 'r') as f:
            json_data = json.load(f)

        image_pool = json_data['image_pool']
        #lure_dict = json_data['lure_dict']

        # Helper: extract filename from full path
        def get_filename(path):
            return path.split('/')[-1]

        # Helper: safely prefix filenames
        def build_full_path(filename):
            if filename.startswith('stimuli/fractals_abstracts_stimuli_101/'):
                return filename
            return os.path.join('stimuli', 'fractals_abstracts_stimuli_101', filename).replace('\\', '/')
      Before JS Experiment:
        // Global vars
        let image_pool = [];
        let real_fractals = [];
        let prev_images = [];

        // Helpers
        function build_full_path(filename) {
            if (filename.startsWith('stimuli/fractals_abstracts_stimuli_101/')) {
                return filename;
            }
            return 'stimuli/fractals_abstracts_stimuli_101/' + filename;
        }
      Begin JS Experiment:
        // Declare global variables so they exist and don't cause "not defined" errors
        var target_1 = "";
        var target_2 = "";
        var target_3 = "";
        var target_4 = "";
        var probe_list = "";
        var targetpos = 0;
        var prev_images = [];
        var real_fractals = [];
        var image_pool = [];
        var load = 1;          // or 4, set dynamically as needed
        var target_ntarget = 1; // or another value, set dynamically as needed
      Begin JS Routine:
        // Helper to safely build full path
        function build_full_path(filename) {
          if (typeof filename !== 'string') return '';
          if (filename.startsWith('stimuli/fractals_abstracts_stimuli_101/')) {
            return filename;
          }
          return 'stimuli/fractals_abstracts_stimuli_101/' + filename;
        }

        // Load JSON once per experiment
        if (image_pool.length === 0) {
            try {
                let jsonStr = psychoJS.serverManager.getResource('stimuli/fractals_abstracts_stimuli_101/lure_and_images.json');
                let jsonData = JSON.parse(jsonStr);
                image_pool = jsonData['image_pool'];
                real_fractals = image_pool.filter(img => img !== '0.png');
                console.log("JSON loaded successfully");
            } catch (error) {
                console.error("Failed to load JSON:", error);
                image_pool = [];
                real_fractals = [];
            }
        }

        // Helper to safely build full path
        function build_full_path(filename) {
            if (typeof filename !== 'string') return '';
            if (filename.startsWith('stimuli/fractals_abstracts_stimuli_101/')) {
                return filename;
            }
            return 'stimuli/fractals_abstracts_stimuli_101/' + filename;
        }

        // Get previous trial's used images to avoid repeats
        if (features.thisN > 0) {
            try {
                let prevTrial = features.getEarlierTrial(features.thisN - 1);
                prev_images = prevTrial['used_images'] || [];
            } catch (e) {
                prev_images = [];
            }
        } else {
            prev_images = [];
        }

        // Select targets and probe
        let attempts = 0;
        let targets = [];
        probe_list = "";

        while (true) {
            attempts++;
            if (attempts > 1000) {
                console.error("Too many attempts to find valid images, breaking.");
                break;
            }

            if (load === 1) {
                // Load 1: 3 fillers + 1 fractal target
                let fractal_target = real_fractals[Math.floor(Math.random() * real_fractals.length)];
                targets = [
                    build_full_path('0.png'),
                    build_full_path('0.png'),
                    build_full_path('0.png'),
                    build_full_path(fractal_target)
                ];
            } else if (load === 4) {
                // Load 4: 4 fractals
                let shuffled = real_fractals.slice().sort(() => 0.5 - Math.random());
                targets = shuffled.slice(0, 4).map(build_full_path);
            } else {
                console.error("Unexpected load value:", load);
                break;
            }

            // Shuffle targets
            targets = targets.sort(() => 0.5 - Math.random());

            // Select probe
            if (target_ntarget === 1) {
                // Probe is one of the targets (excluding fillers)
                let probe_candidates = targets.filter(img => !img.includes('0.png'));
                if (probe_candidates.length === 0) continue;
                probe_list = probe_candidates[Math.floor(Math.random() * probe_candidates.length)];
            } else {
                // Probe is not in targets
                let probe_pool = real_fractals.filter(img => !targets.includes(build_full_path(img)));
                if (probe_pool.length === 0) continue;
                probe_list = build_full_path(probe_pool[Math.floor(Math.random() * probe_pool.length)]);
            }

            // Check if any current images were used in the previous trial
            let current_images = targets.filter(img => !img.includes('0.png')).concat([probe_list]);
            if (prev_images.some(img => current_images.includes(img))) {
                continue;  // retry
            }

            break;  // valid selection
        }

        // Assign variables for Builder
        [target_1, target_2, target_3, target_4] = targets;

        // Determine probe position
        targetpos = 0;
        if (target_ntarget === 1) {
            if (probe_list === target_1) targetpos = 1;
            else if (probe_list === target_2) targetpos = 2;
            else if (probe_list === target_3) targetpos = 3;
            else if (probe_list === target_4) targetpos = 4;
        }

        // Save data for this trial
        features.addData('target_1', target_1);
        features.addData('target_2', target_2);
        features.addData('target_3', target_3);
        features.addData('target_4', target_4);
        features.addData('probe_list', probe_list);
        features.addData('targetpos', targetpos);
        features.addData('used_images', targets.filter(img => !img.includes('0.png')).concat([probe_list]));
      Begin Routine:
        EEGtriggerSent = False #EGI
        EYEtriggerSent = False #EGI

        #import random
        #
        ## Exclude filler from real fractals
        #real_fractals = [img for img in image_pool if '0.png' not in img]
        #
        ## Select target images
        #if load == 1:
        #    fractal_target = random.choice(real_fractals)
        #    targets = ['stimuli/fractals_abstracts_stimuli_101/0.png'] * 3 + [fractal_target]
        #elif load == 4:
        #    targets = random.sample(real_fractals, 4)
        #
        #random.shuffle(targets)
        #
        ## Assign targets
        #target_1 = targets[0]
        #target_2 = targets[1]
        #target_3 = targets[2]
        #target_4 = targets[3]
        #
        ## Select probe
        #if target_ntarget == 1:
        #    # Only choose from real fractals in targets (exclude 0.png)
        #    probe_candidates = [t for t in targets if '0.png' not in t]
        #    probe_list = random.choice(probe_candidates)
        #else:
        #    probe_pool = [img for img in real_fractals if img not in targets]
        #    probe_list = random.choice(probe_pool)
        #
        ## Determine which target position the probe matched (1–4), or 0 if no match
        #if target_ntarget == 1:
        #    if probe_list == target_1:
        #        targetpos = 1
        #    elif probe_list == target_2:
        #        targetpos = 2
        #    elif probe_list == target_3:
        #        targetpos = 3
        #    elif probe_list == target_4:
        #        targetpos = 4
        #    else:
        #        targetpos = 0  # Fallback, should not happen
        #else:
        #    targetpos = 0
        #
        ## Save data to loop
        #features.addData('target_1', target_1)
        #features.addData('target_2', target_2)
        #features.addData('target_3', target_3)
        #features.addData('target_4', target_4)
        #features.addData('probe_list', probe_list)
        #features.addData('targetpos', targetpos)


        #import random
        #
        ## SAFELY get load and target_ntarget from your condition file
        ## (They should be defined automatically by PsychoPy if listed in the .csv file)
        ## No need to assign them manually
        #
        ## Get previous images safely
        #try:
        #    prev_images = features.thisN > 0 and features.trialList[features.thisN - 1].get('used_images', [])
        #    if not isinstance(prev_images, list):
        #        prev_images = []
        #except Exception:
        #    prev_images = []
        #
        ## Create list of real fractals (exclude filler "0.png")
        #real_fractals = [img for img in image_pool if '0.png' not in img]
        #
        ## Dynamic function with load and target_ntarget passed from current trial
        #def get_new_trial_images(prev_images, load, target_ntarget):
        #    while True:
        #        if load == 1:
        #            fractal_target = random.choice(real_fractals)
        #            targets = ['stimuli/fractals_abstracts_stimuli_101/0.png'] * 3 + [fractal_target]
        #        elif load == 4:
        #            targets = random.sample(real_fractals, 4)
        #        else:
        #            raise ValueError(f"Unexpected load value: {load}")
        #
        #        random.shuffle(targets)
        #
        #        # Choose probe
        #        if target_ntarget == 1:
        #            probe_candidates = [t for t in targets if '0.png' not in t]
        #            probe_list = random.choice(probe_candidates)
        #        else:
        #            probe_pool = [img for img in real_fractals if img not in targets]
        #            probe_list = random.choice(probe_pool)
        #
        #        # Collect images used this trial (excluding filler)
        #        current_images = [img for img in targets if '0.png' not in img]
        #        current_images.append(probe_list)
        #
        #        # Ensure no repeat from last trial
        #        if not any(img in prev_images for img in current_images):
        #            return targets, probe_list
        #
        ## Run the function using the dynamic loop values
        #targets, probe_list = get_new_trial_images(prev_images, load, target_ntarget)
        #
        ## Assign image slots for Builder components
        #target_1, target_2, target_3, target_4 = targets
        #
        ## Determine match location (1–4) or 0
        #if target_ntarget == 1:
        #    if probe_list == target_1:
        #        targetpos = 1
        #    elif probe_list == target_2:
        #        targetpos = 2
        #    elif probe_list == target_3:
        #        targetpos = 3
        #    elif probe_list == target_4:
        #        targetpos = 4
        #    else:
        #        targetpos = 0
        #else:
        #    targetpos = 0
        #
        ## Save data
        #features.addData('target_1', target_1)
        #features.addData('target_2', target_2)
        #features.addData('target_3', target_3)
        #features.addData('target_4', target_4)
        #features.addData('probe_list', probe_list)
        #features.addData('targetpos', targetpos)


        # Get previous images safely for no repeats
        try:
            if features.thisN > 0:
                prev_images = features.trialList[features.thisN - 1].get('used_images', [])
                if not isinstance(prev_images, list):
                    prev_images = []
            else:
                prev_images = []
        except Exception:
            prev_images = []

        # Create list of real fractals (exclude filler "0.png")
        real_fractals = [img for img in image_pool if '0.png' not in img]

        # Main function to generate targets + probe
        def get_new_trial_images(prev_images, load, target_ntarget):
            attempts = 0
            while True:
                attempts += 1
                if attempts > 1000:
                    print("ERROR: Too many attempts to generate valid trial images. Breaking loop.")
                    raise RuntimeError("Failed to generate valid trial images after 1000 attempts")

                # LOAD = 1
                if load == 1:
                    possible_targets = real_fractals.copy()
                    fractal_target = random.choice(possible_targets)
                    targets = [build_full_path('0.png')] * 3 + [fractal_target]

                # LOAD = 4
                elif load == 4:
                    all_combos = random.sample(real_fractals, len(real_fractals))
                    valid_set = None
                    for i in range(len(all_combos) - 3):
                        candidate = all_combos[i:i+4]
                        valid_set = candidate
                        break
                    if not valid_set:
                        print(f"Attempt {attempts}: No valid set found for load=4")
                        continue
                    targets = valid_set

                else:
                    raise ValueError(f"Unexpected load value: {load}")

                random.shuffle(targets)

                # PROBE SELECTION
                if target_ntarget == 1:
                    probe_candidates = [t for t in targets if '0.png' not in t]
                    if not probe_candidates:
                        print(f"Attempt {attempts}: No probe candidates for target_ntarget=1")
                        continue
                    probe_list = random.choice(probe_candidates)
                else:
                    probe_pool = [img for img in real_fractals if img not in targets]
                    if not probe_pool:
                        print(f"Attempt {attempts}: No probe pool for nonmatch probe")
                        continue
                    probe_list = random.choice(probe_pool)

                # Check for repeats from previous trial
                current_images = [img for img in targets if '0.png' not in img] + [probe_list]
                if any(img in prev_images for img in current_images):
                    print(f"Attempt {attempts}: Repeat detected from previous trial, retrying...")
                    continue

                print(f"Attempt {attempts}: Success with targets={targets}, probe={probe_list}")
                return targets, probe_list

        # Run image selection for this trial
        targets, probe_list = get_new_trial_images(prev_images, load, target_ntarget)

        # Assign image slots for Builder components
        target_1, target_2, target_3, target_4 = targets

        # Determine match location (1–4) or 0
        if target_ntarget == 1:
            if probe_list == target_1:
                targetpos = 1
            elif probe_list == target_2:
                targetpos = 2
            elif probe_list == target_3:
                targetpos = 3
            elif probe_list == target_4:
                targetpos = 4
            else:
                targetpos = 0
        else:
            targetpos = 0

        # Save trial-level data
        features.addData('target_1', target_1)
        features.addData('target_2', target_2)
        features.addData('target_3', target_3)
        features.addData('target_4', target_4)
        features.addData('probe_list', probe_list)
        features.addData('targetpos', targetpos)
      Each Frame:
        if expInfo['eeg'] and fix_cross_features.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(2.5)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['eyetrack'] and fix_cross_features.status == STARTED and not EYEtriggerSent:
             win.callOnFlip(tracker.log_message,TRG)
             EYEtriggerSent = True
      End Routine:
        #if expInfo['eeg']:
        #    ns.send_event(event_type=TRG, start=fix_cross_features.started)
    ImageComponent fix_cross_features
      image = stimuli/SDRT/fix.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent t1
      image [set every repeat] = $target_1
      pos = (-0.1, 0.15)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent t2
      image [set every repeat] = $target_2
      pos = (0.1, 0.15)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent t3
      image [set every repeat] = $target_3
      pos = (-0.1, -0.05)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent t4
      image [set every repeat] = $target_4
      pos = (0.1, -0.05)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine ProbeFeatures
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    CodeComponent code_probeFeatures
      Code Type = Both
      Begin JS Routine:
        prbL = "white";
        prbR = "white";
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False

        prbL="white"
        prbR="white"

        rspprobe=0
      Each Frame:
        if expInfo['eeg'] and probe_image.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="PRB+",label=PRB,duration=float(2.0)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['eyetrack'] and probe_image.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,PRB)
            EYEtriggerSent = True

        #if key_resp_feat:
        #    if key_resp_feat.keys=='1':
        #        prbL="blue"
        #        if expInfo['eeg'] and rspprobe==0:
        #            ns.send_event(event_type="RESP",label="RSPL")
        #            rspprobe=1
        #    elif key_resp_feat.keys=='2':
        #        prbR="blue"
        #        if expInfo['eeg'] and rspprobe==0:
        #            ns.send_event(event_type="RESP",label="RSPR")
        #            rspprobe=1

        if key_resp_feat:
            if key_resp_feat.keys=='left':
                prbL="blue"
                if expInfo['eeg'] and rspprobe==0:
                    ns.send_event(event_type="RESP",label="RSPL")
                    rspprobe=1
            elif key_resp_feat.keys=='right':
                prbR="blue"
                if expInfo['eeg'] and rspprobe==0:
                    ns.send_event(event_type="RESP",label="RSPR")
                    rspprobe=1
      Each JS Frame:
        if (key_resp_feat) {
            if ((key_resp_feat.keys === "1") || (key_resp_feat.keys === "left")) {
                prbL = "blue";
            } else {
                if ((key_resp_feat.keys === "2") || (key_resp_feat.keys === "right")) {
                    prbR = "blue";
                }
            }
        }
      End JS Routine:
        s_key = key_resp_feat.keys;
        if ((s_key === "s")) {
            features.finished = true;
        }

        thisExp=psychoJS.experiment;

        if ((correct_resp === 1) || (correct_resp === "1")) {
            correctKey = ["1","left"];
        }
        if ((correct_resp === 2) || (correct_resp === "2")) {
            correctKey = ["2","right"];
        }

        if ((key_resp_feat.keys === correctKey[0]) || (key_resp_feat.keys === correctKey[1])) {
            key_resp_feat.corr = true;
        } else {
            key_resp_feat.corr = false;
        }

        thisExp.addData("correctKey", correctKey);
        thisExp.addData("key_resp_corr", key_resp_feat.corr)
      End Routine:
        if expInfo['eeg'] and rspprobe==0:
            ns.send_event(event_type="RESP",label="MISS")
            rspprobe=1
    ImageComponent probe_image
      image [set every repeat] = $probe_list
      pos = (0, 0.05)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_feat
      allowedKeys = '1','left','2','right','s'
      correctAns = $correct_resp2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    TextComponent features_LEFT
      color [set every frame] = $prbL
      languageStyle = RTL
      letterHeight = 0.08
      pos = (-0.20,-0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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      text:
        <--
        Same
    TextComponent features_RIGHT
      color [set every frame] = $prbR
      letterHeight = 0.08
      pos = (0.20,-0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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      text:
        -->
        Different
  Routine FB_Features
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    CodeComponent code_FB_Features
      Code Type = Both
      Begin JS Routine:
        resp = psychoJS.experiment._trialsData;
        // Get count of correct trials
        acc = 0;
        //acc = resp.reduce((a, b) => a + b['key_resp_feat.corr'], 0);
        // Get Trial Length
        //num = resp.length;
        num=features.thisN;

        // Mean RTs:
        sumRt = 0;
        for (let eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++)
        {
          if ('key_resp_feat.rt' in psychoJS.experiment._trialsData[eachResp]) {
            sumRt += psychoJS.experiment._trialsData[eachResp]['key_resp_feat.rt'];
            acc += psychoJS.experiment._trialsData[eachResp]['key_resp_feat.corr'];

          }
        }
        meanRt=(sumRt/num);
        //console.log(sumRt)
        pacc=( acc / num ) * 100;
        //console.log(pacc)

        //message for display
        msg = "Great Job !!!!!!\n\nYou got "+String(parseFloat(pacc).toFixed(2))+"% correct. \nYour response time is "+String(parseFloat(meanRt).toFixed(2))+" sec.";
      Begin Routine:
        # get reaction time and accuracy
        fmeanRt = features.data['key_resp_feat.rt'].mean()
        facc = features.data['key_resp_feat.corr'].sum()
        # calculate percent accuracy
        num = features.nTotal
        fpacc=(facc/num)*100
        # message for display
        msg = "Great Job !!!!!!\n\nYou got %0.2f %% correct. \nYour response time is %0.2f sec." %(fpacc,fmeanRt)

        core.wait(3) # sleep 3 seconds

        if expInfo['eyetrack']:
            # stop recording
            tracker.log_message("STOP")
            tracker.stop_recording()
            # close connection to the tracker
            tracker.close()

        if expInfo['eeg']:
            ns.send_event(event_type="STOP")
            ns.end_rec()
            ns.disconnect()
    TextComponent text_Features
      letterHeight = 0.06
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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  Routine instrFeatures
    RoutineSettingsComponent instrFeatures
      skipIf = expInfo['DoPractice'] == False
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    CodeComponent code_restartNS
      Code Type = Py
      End Routine:
        if expInfo['eeg']:
            # import egi_pynetstation
            from egi_pynetstation.NetStation import NetStation
            # address and port
            ns = NetStation('169.254.111.111', 55513)
            # Set an NTP clock server address as an IPv4 string
            IP_ntp = '169.254.111.111'
            ns.connect(ntp_ip=IP_ntp)
            ns.begin_rec() # Begin recording
            ns.send_event(event_type="STRT",label="STRT",start=0.0)
            # NOTE: when using the event sender, "now".
            # Tests on a Windows 7 machine with PsychoPy indicate that the
            # latency in real time is about 54 +/- 3 ms for a short experiment.

        RunningClock = globalClock.getTime()
        thisExp.addData('RunningClock',RunningClock)

        if expInfo['eyetrack']:
            # import pytribe
            from PyTribe.pytribe import EyeTribe
            # Data file name stem = absolute path + name; later add .psyexp, .csv, .log, etc
            SUB = u'sub-%s' % (expInfo['participant'])
            TIMESTRT = time.strftime("%Y%m%dT%H%M%S")
            EYELOG = u'sub-%s_task-%s_eyetrack_%s' % (expInfo['participant'], expName, TIMESTRT)
            DIR = os.path.dirname(os.path.abspath(__file__))
            LOGFILE = os.path.join(DIR, 'data', EYELOG)
            # start communications with the EyeTribe tracker
            tracker = EyeTribe(logfilename=LOGFILE)
            # start recording gaze data
            tracker.start_recording()
            tracker.log_message("STRT")
    TextComponent text_features
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Remember, your task is to memorize the features of the dots. When a single dot appears at the center of the screen:

        PRESS the LEFT button if you think the dot is the SAME as one of the previous dots

        PRESS the RIGHT button if you think the dot is DIFFERENT than one of the previous dots

        Press [SPACE] to begin the task
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instrLetters
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    CodeComponent code_restartNS_letters
      Code Type = Py
      End Routine:
        if expInfo['eeg']:
            # import egi_pynetstation
            from egi_pynetstation.NetStation import NetStation
            # address and port
            ns = NetStation('169.254.111.111', 55513)
            # Set an NTP clock server address as an IPv4 string
            IP_ntp = '169.254.111.111'
            ns.connect(ntp_ip=IP_ntp)
            ns.begin_rec() # Begin recording
            ns.send_event(event_type="STRT",label="STRT",start=0.0)

        RunningClock = globalClock.getTime()
        thisExp.addData('RunningClock',RunningClock)

        if expInfo['eyetrack']:
            # import pytribe
            from PyTribe.pytribe import EyeTribe
            # Data file name stem = absolute path + name; later add .psyexp, .csv, .log, etc
            SUB = u'sub-%s' % (expInfo['participant'])
            TIMESTRT = time.strftime("%Y%m%dT%H%M%S")
            #EYELOG = SUB + '_task-swm_acq-eyetribe_eyetrack_' + TIMESTRT
            EYELOG = u'sub-%s_task-letters_eyetrack_%s' % (expInfo['participant'], TIMESTRT)
            DIR = os.path.dirname(os.path.abspath(__file__))
            LOGFILE = os.path.join(DIR, 'data', EYELOG)
            #EYELOG = _thisDir + os.sep + u'data/sub-%s_task-%s_eyetrack_%s' % (expInfo['participant'], expName, expInfo['date'])
            # start communications with the EyeTribe tracker
            tracker = EyeTribe(logfilename=LOGFILE)
            # start recording gaze data
            tracker.start_recording()
            #tracker.log_message("recording_started")
            tracker.log_message("STRT")
    TextComponent text_letters
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Remember, your task is to memorize the list of letter pairs. When a single letter pair appears at the center of the screen:

        PRESS the LEFT button if you think the letter pair is the SAME as one of the previous letter pairs

        PRESS the RIGHT button if you think the letter pair is DIFFERENT than one of the previous letter pairs

        Press [SPACE] to begin the task
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instrSDRT
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    CodeComponent code_hardware
      Code Type = Both
      Begin Routine:
        if expInfo['eeg']:
            # import egi_pynetstation
            from egi_pynetstation.NetStation import NetStation
            # address and port
            ns = NetStation('169.254.111.111', 55513)
            # Set an NTP clock server address as an IPv4 string
            IP_ntp = '169.254.111.111'
            ns.connect(ntp_ip=IP_ntp)
            ns.begin_rec() # Begin recording
            ns.send_event(event_type="STRT",label="STRT",start=0.0)
            # NOTE: when using the event sender, "now".
            # Tests on a Windows 7 machine with PsychoPy indicate that the
            # latency in real time is about 54 +/- 3 ms for a short experiment.

        RunningClock = globalClock.getTime()
        thisExp.addData('RunningClock',RunningClock)

        if expInfo['eyetrack']:
            # import pytribe
            from PyTribe.pytribe import EyeTribe
            # Data file name stem = absolute path + name; later add .psyexp, .csv, .log, etc
            SUB = u'sub-%s' % (expInfo['participant'])
            TIMESTRT = time.strftime("%Y%m%dT%H%M%S")
            #EYELOG = SUB + '_task-swm_acq-eyetribe_eyetrack_' + TIMESTRT
            EYELOG = u'sub-%s_task-sdrt_eyetrack_%s' % (expInfo['participant'], TIMESTRT)
            DIR = os.path.dirname(os.path.abspath(__file__))
            LOGFILE = os.path.join(DIR, 'data', EYELOG)
            #EYELOG = _thisDir + os.sep + u'data/sub-%s_task-%s_eyetrack_%s' % (expInfo['participant'], expName, expInfo['date'])
            # start communications with the EyeTribe tracker
            tracker = EyeTribe(logfilename=LOGFILE)
            # start recording gaze data
            tracker.start_recording()
            #tracker.log_message("recording_started")
            tracker.log_message("STRT")
      End Experiment:
        #if expInfo['eeg']:
        #    ns.end_rec()
        #    ns.disconnect()

        #if expInfo['eyetrack']:
            # stop recording
        #    tracker.stop_recording()
            # close connection to the tracker
        #    tracker.close()
      End JS Experiment:
        document.body.style.cursor='auto';
    TextComponent text_instruct
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Remember, your task is memorize the location of the yellow dots. When the green dot appears:

        PRESS the LEFT button if you think the green dot is in the SAME place as one of the yellow dots

        PRESS the RIGHT button if you think the green dot is in a DIFFERENT place than any of the yellow dots

        Press [SPACE] to begin the task
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Start
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    CodeComponent code_start
      Code Type = Both
      Begin JS Experiment:
        document.body.style.cursor='none';

        var sUsrAg;
        var nIdx;
        function getBrowserId () {
         var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
         sUsrAg = window.navigator.userAgent,
         nIdx = browsers.length - 1;
         for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }
        // save cpu & browser information
        thisExp=psychoJS.experiment;
        expInfo['OS'] = window.navigator.platform;
        expInfo['browser'] = getBrowserId();
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
      Begin Routine:
        win.mouseVisible = False
  Routine Question1
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    TextComponent TextQ1
      disabled = True
      letterHeight = 0.08
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What percentage of your responses do you think you got correct (0-100)?
      units = norm
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    RatingScaleComponent RatingQ1
      disabled = True
      forceEndRoutine = True
      pos = 0, 0
      size = 1.0
      startVal [time (s)] = 0.0
      storeHistory = True
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    TextComponent TextIns1
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (press the left button decrease your percentage, press the right button to increase your percentage)
      units = norm
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  Routine Question2
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    TextComponent TextQ2
      disabled = True
      letterHeight = 0.08
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How well do you think you did on this task (0-100)? 
      units = norm
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    RatingScaleComponent RatingQ2
      disabled = True
      forceEndRoutine = True
      pos = 0,0
      size = 1.0
      startVal [time (s)] = 0.0
      storeHistory = True
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    TextComponent TextIns2
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (press the left button decrease your confidence, press the right button to increase your confidence)
      units = norm
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  Routine gReady
    RoutineSettingsComponent gReady
      skipIf = expInfo['DoPractice'] == False
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    TextComponent gtReady
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text =  -- get ready --
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    KeyboardComponent key_gR
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questions
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    TextComponent text_questions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Do you have any questions?



        Press RIGHT to continue
    KeyboardComponent key_questions
      allowedKeys = 'right','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LetsPractice
    RoutineSettingsComponent LetsPractice
      skipIf = expInfo['DoPractice'] == False
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    TextComponent Practice1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's practice



        Press LEFT to continue
    KeyboardComponent key_practice1
      allowedKeys = 'left','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LetsPractice_2
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    TextComponent Practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's practice



        Press LEFT to continue
    KeyboardComponent key_practice
      allowedKeys = 'left','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixationP
    RoutineSettingsComponent FixationP
      skipIf = expInfo['DoPractice'] == False
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    ImageComponent image_fixation_2
      image = stimuli/SDRT/fix.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EncondeFeaturesP
    RoutineSettingsComponent EncondeFeaturesP
      skipIf = expInfo['DoPractice'] == False
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    ImageComponent fix_cross_features_2
      image = stimuli/SDRT/fix.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent t1_2
      image [set every repeat] = $targetP_1
      pos = (-0.1, 0.15)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent t2_2
      image [set every repeat] = $targetP_2
      pos = (0.1, 0.15)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent t3_2
      image [set every repeat] = $targetP_3
      pos = (-0.1, -0.05)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent t4_2
      image [set every repeat] = $targetP_4
      pos = (0.1, -0.05)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine MaintenanceP
    RoutineSettingsComponent MaintenanceP
      skipIf = expInfo['DoPractice'] == False
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    ImageComponent image_maint_2
      image [set every repeat] = stimuli/SDRT/fix.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine ProbeFeaturesP
    RoutineSettingsComponent ProbeFeaturesP
      skipIf = expInfo['DoPractice'] == False
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    CodeComponent code_probeFeatures_2
      Code Type = Both
      Begin JS Routine:
        prbL = "white";
        prbR = "white";
      Begin Routine:
        prbL="white"
        prbR="white"

        rspprobe=0
      Each Frame:
        #if key_resp_feat_2:
        #    if key_resp_feat_2.keys=='1':
        #        prbL="blue"
        #    elif key_resp_feat_2.keys=='2':
        #        prbR="blue"

        if key_resp_feat_2:
           if key_resp_feat_2.keys=='left':
                prbL="blue"
           elif key_resp_feat_2.keys=='right':
                prbR="blue"
      Each JS Frame:
        if (key_resp_feat_2) {
            if ((key_resp_feat_2.keys === "1") || (key_resp_feat_2.keys === "left")) {
                prbL = "blue";
            } else {
                if ((key_resp_feat_2.keys === "2") || (key_resp_feat_2.keys === "right")) {
                    prbR = "blue";
                }
            }
        }
      End JS Routine:
        s_key = key_resp_feat_2.keys;
        if ((s_key === "s")) {
            features.finished = true;
        }

        thisExp=psychoJS.experiment;

        if ((correct_resp === 1) || (correct_resp === "1")) {
            correctKey = ["1","left"];
        }
        if ((correct_resp === 2) || (correct_resp === "2")) {
            correctKey = ["2","right"];
        }

        if ((key_resp_feat_2.keys === correctKey[0]) || (key_resp_feat_2.keys === correctKey[1])) {
            key_resp_feat_2.corr = true;
        } else {
            key_resp_feat_2.corr = false;
        }

        thisExp.addData("correctKey", correctKey);
        thisExp.addData("key_resp_corr", key_resp_feat.corr)
    ImageComponent probe_image_2
      image [set every repeat] = $probeP_list
      pos = (0, 0.05)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_feat_2
      allowedKeys = '1','left','2','right','s'
      correctAns = $correct_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    TextComponent features_LEFT_2
      color [set every frame] = $prbL
      languageStyle = RTL
      letterHeight = 0.08
      pos = (-0.20,-0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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      text:
        <--
        Same
    TextComponent features_RIGHT_2
      color [set every frame] = $prbR
      letterHeight = 0.08
      pos = (0.20,-0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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      text:
        -->
        Different
  Routine ISIP
    RoutineSettingsComponent ISIP
      skipIf = expInfo['DoPractice'] == False
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    ImageComponent image_ISI_2
      image = stimuli/SDRT/BLANK.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine Start
  Routine instrFeatures
  Routine LetsPractice
  Routine gReady
  Routine getReady
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = conditions_block/fractals_practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trial', 12), ('target_1', 'stimuli/fractals_abstracts_stimuli_101/11.png'), ('target_2', 'stimuli/fractals_abstracts_stimuli_101/0.png'), ('target_3', 'stimuli/fractals_abstracts_stimuli_101/0.png'), ('target_4', 'stimuli/fractals_abstracts_stimuli_101/0.png'), ('probe_list', 'stimuli/fractals_abstracts_stimuli_101/11.png'), ('condition', 'fractals'), ('mask', 0), ('stim_size', 0.15), ('load', 1), ('correct_resp', 1), ('target_ntarget', 1), ('imagegroup', 0), ('targetpos', 1), ('matcharrow', '{LEFTARROW}')]),
      OrderedDict([('Trial', 33), ('target_1', 'stimuli/fractals_abstracts_stimuli_101/2.png'), ('target_2', 'stimuli/fractals_abstracts_stimuli_101/52.png'), ('target_3', 'stimuli/fractals_abstracts_stimuli_101/27.png'), ('target_4', 'stimuli/fractals_abstracts_stimuli_101/77.png'), ('probe_list', 'stimuli/fractals_abstracts_stimuli_101/22.png'), ('condition', 'fractals'), ('mask', 0), ('stim_size', 0.15), ('load', 4), ('correct_resp', 2), ('target_ntarget', 0), ('imagegroup', 0), ('targetpos', 0), ('matcharrow', '{RIGHTARROW}')])]
    Routine FixationP
    Routine EncondeFeaturesP
    Routine MaintenanceP
    Routine ProbeFeaturesP
    Routine ISIP
  LoopTerminator trials_practice
  Routine Questions
  Routine gReady
  Routine getReady
  LoopInitiator features loopType="TrialHandler"
    conditionsFile = conditions_block/fractals_randomized.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trial', 1), ('condition', 'fractals'), ('mask', 0), ('stim_size', 0.15), ('load', 1), ('correct_resp1', 2), ('correct_resp2', 'right'), ('target_ntarget', 0), ('imagegroup', 0), ('matcharrow', '{RIGHTARROW}')]),
      OrderedDict([('Trial', 2), ('condition', 'fractals'), ('mask', 0), ('stim_size', 0.15), ('load', 1), ('correct_resp1', 2), ('correct_resp2', 'right'), ('target_ntarget', 0), ('imagegroup', 0), ('matcharrow', '{RIGHTARROW}')]),
      OrderedDict([('Trial', 3), ('condition', 'fractals'), ('mask', 0), ('stim_size', 0.15), ('load', 1), ('correct_resp1', 2), ('correct_resp2', 'right'), ('target_ntarget', 0), ('imagegroup', 0), ('matcharrow', '{RIGHTARROW}')]),
      OrderedDict([('Trial', 4), ('condition', 'fractals'), ('mask', 0), ('stim_size', 0.15), ('load', 1), ('correct_resp1', 2), ('correct_resp2', 'right'), ('target_ntarget', 0), ('imagegroup', 0), ('matcharrow', '{RIGHTARROW}')]),
      OrderedDict([('Trial', 5), ('condition', 'fractals'), ('mask', 0), ('stim_size', 0.15), ('load', 1), ('correct_resp1', 2), ('correct_resp2', 'right'), ('target_ntarget', 0), ('imagegroup', 0), ('matcharrow', '{RIGHTARROW}')]),
      OrderedDict([('Trial', 6), ('condition', 'fractals'), ('mask', 0), ('stim_size', 0.15), ('load', 1), ('correct_resp1', 2), ('correct_resp2', 'right'), ('target_ntarget', 0), ('imagegroup', 0), ('matcharrow', '{RIGHTARROW}')])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
    Routine Fixation
    Routine EncodeFeatures
    Routine Maintenance
    Routine ProbeFeatures
    Routine ISI
  LoopTerminator features
  Routine Question1
  Routine Question2
  Routine FB_Features
